<?xml version="1.0" encoding="UTF-8"?>
<batch>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>input.mzML</file>
        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.filtering.cropper.CropFilterModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <retention_time>
                <min>0.5</min>
                <max>20.0</max>
            </retention_time>
            <polarity>POSITIVE</polarity>
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="m/z">
            <min>100.0</min>
            <max>800.0</max>
        </parameter>
        <parameter name="Suffix">CROPPED</parameter>
        <parameter name="Remove source file after filtering">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans"/>
        <parameter name="Mass detector" selected="Exact mass">
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            <module name="Exact mass">
                <parameter name="Noise level">30000.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="CDF Filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.chromatogrambuilder.ChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min time span (min)">0.06</parameter>
        <parameter name="Min height">10000.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>5.0E-4</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.filtering.rowsfilter.RowsFilterModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">long_duration_removed</parameter>
        <parameter name="Minimum peaks in a row" selected="false"/>
        <parameter name="Minimum peaks in an isotope pattern" selected="false"/>
        <parameter name="m/z" selected="false">
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        </parameter>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Peak duration range" selected="true">
            <min>19.3</min>
            <max>100.0</max>
        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Remove rows that match all criteria</parameter>
        <parameter name="Keep only peaks with MS2 scan (GNPS)">false</parameter>
        <parameter name="Reset the peak number ID">true</parameter>
        <parameter name="Remove source peak list after filtering">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.peakpicking.deconvolution.DeconvolutionModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Local minimum search">
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            <module name="Local minimum search">
                <parameter name="Chromatographic threshold">0.0</parameter>
                <parameter name="Search minimum in RT range (min)">0.3</parameter>
                <parameter name="Minimum relative height">0.0025</parameter>
                <parameter name="Minimum absolute height">10000.0</parameter>
                <parameter name="Min ratio of peak top/edge">6.0</parameter>
                <parameter name="Peak duration range (min)">
                    <min>0.0</min>
                    <max>9.9999999E7</max>
                </parameter>
            </module>
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        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="false">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</parameter>
        <parameter name="RT range for MS2 scan pairing (min)" selected="false">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</parameter>
        <parameter name="Remove original peak list">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.identification.adductsearch.AdductSearchModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="RT tolerance" type="absolute">0.3</parameter>
        <parameter name="Adducts">
            <adduct mass_difference="21.9825" name="[M+Na-H]" selected="true"/>
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.001</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Max relative adduct peak height">0.5</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.filtering.rowsfilter.RowsFilterModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">no_sodium_adducts</parameter>
        <parameter name="Minimum peaks in a row" selected="false"/>
        <parameter name="Minimum peaks in an isotope pattern" selected="false"/>
        <parameter name="m/z" selected="false">
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        </parameter>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Peak duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="true">M+Na-H</parameter>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Remove rows that match all criteria</parameter>
        <parameter name="Keep only peaks with MS2 scan (GNPS)">false</parameter>
        <parameter name="Reset the peak number ID">false</parameter>
        <parameter name="Remove source peak list after filtering">true</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.io.mztabexport.MzTabExportModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Filename">/OUTPUTPATH/output.mzTab</parameter>
        <parameter name="Include all peaks">true</parameter>
    </batchstep>
</batch>
